PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['pOrder'], expName, expInfo['date'])
  Experiment info = {'pOrder': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = black
  expName = 11-20_game
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Routines
  Routine intro
    TextComponent text
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Welcome to the 11 - 20 game

        There is only one decision in this part. You must choose an integer between 11 and 20. You will receive the amount in points that you choose. In addition, at the end of the experiment, pairs of participants will be randomly formed, and the selected numbers will be compared.

        If you choose the same number as the other member of your pair, you will receivean additional 10. If you choose a number that is exactly one less than the other member of your pair, you receive an additional 20.

        Examples:
        • If you choose 17 and the other member of your pair has chosen 19, then you receive 17 and they receives 19.
        • If you choose 12 and the other member of your pair has chosen 13, then you will receive 32 and they will receive 13.
        • If you choose 16 and the other member of your pair has chosen 16, then you will receive 26 and they will receive 26.

        Press SPACE to begin
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine trial
    TextComponent text_2
      letterHeight = 0.04
      pos = (0, .38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please select an integer betwen 11 and 20
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    SliderComponent slider
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = (11, 12, 13, 14, 15, 16, 17, 18 ,19, 20)
      letterHeight = 0.05
      pos = (0, 0.05)
      saveStartStop = False
      size = (1.3, 0.15)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (11, 12, 13, 14, 15, 16, 17, 18 ,19, 20)
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        from psychopy.visual import Slider
        from psychopy import event

        slider.marker.size = 0.04
        moved_slider = False
      Each Frame:
        current_rating = slider.getRating()

        if current_rating is not None and not moved_slider:
                moved_slider = True
                event.clearEvents()  # Clear all previous keypresses

        # Only check for spacebar if slider has been moved
        if moved_slider:
            keys = event.getKeys(keyList=['space'])
            if 'space' in keys:
                continueRoutine = False
    TextComponent text_3
      letterHeight = 0.04
      pos = (0, -.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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  Routine end
    TextComponent text_4
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Thank you for your participation

        The experiment will now end
Flow
  Routine intro
  Routine trial
  Routine end
