PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['pOrder'], expName, expInfo['date'])
  Experiment info = {'pOrder': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920,1080]
  color = black
  expName = SVO
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Routines
  Routine welcome_2
    TextComponent IntroText_2
      letterHeight = 0.04
      pos = (0, .27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Your decisions will yield money for both yourself and the other person. In the example below, a person has chosen to distribute money so that he/she receives 50 dollars, while the anonymous other person receives 40 dollars.

        There are no right or wrong answers, this is all about personal preferences. After you have made your decision, the resulting distribution will apear on the spaces on the right. As you can see, your choices will influence both the amount of money you receive as well as the amount of money the other receives.
    SliderComponent slider_1
      forceEndRoutine = False
      granularity = .5
      initVal = 5
      letterHeight = 0.05
      pos = (0, -.16)
      readOnly = True
      saveStartStop = False
      size = (1.0, 0.15)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        from psychopy.visual.slider import Slider
        from psychopy.visual.line import Line

        # Adjust the marker size (smaller = less than default 0.05)
        slider_1.marker.size = 0.04

        tick_xpos = [-.5, -.375, -.25, -.125, 0, .125, .25, .375, .5]
        midpoints = []
        slider_ypos = slider_1.pos[1]
        for i in range(len(tick_xpos)-1):
            midpoint = (tick_xpos[i] + tick_xpos[i+1]) / 2
            midpoints.append(midpoint)

        line_pos = []
        for x in midpoints:
            line = Line(
                win,
                start = (x , slider_ypos -.04),
                end = (x , slider_ypos +.04),
                lineColor = 'gray',
                lineWidth = 6,
                autoDraw = True
            )
            line_pos.append(line)
      End Routine:
        for line in line_pos:
            line.autoDraw = False
    TextComponent IntroText_3
      letterHeight = 0.04
      pos = (0, -.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin
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    TextboxComponent YouReceiveText_1
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.5, -.03)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  30
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    TextboxComponent YouReceiveText_2
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.375, -.03)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  35
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    TextboxComponent YouReceiveText_3
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.125, -.03)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  40
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    TextboxComponent YouReceiveText_4
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.25, -.03)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  45
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    TextboxComponent YouReceiveText_5
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (0, -.03)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  50
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    TextboxComponent YouReceiveText_6
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.25, -.03)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  55
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    TextboxComponent YouReceiveText_7
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.125, -.03)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  60
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    TextboxComponent YouReceiveText_8
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.375, -.03)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  65
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    TextboxComponent YouReceiveText_9
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.5, -.03)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  70
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    TextboxComponent OtherReceiveText_1
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.5, -.29)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  80
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    TextboxComponent OtherReceiveText_2
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.375, -.29)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  70
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    TextboxComponent OtherReceiveText_3
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.125, -.29)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  60
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    TextboxComponent OtherReceiveText_4
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.25, -.29)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  50
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    TextboxComponent OtherReceiveText_5
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (0, -.29)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  40
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    TextboxComponent OtherReceiveText_6
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.25, -.29)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  30
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    TextboxComponent OtherReceiveText_7
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.125, -.29)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  20
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    TextboxComponent OtherReceiveText_8
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.375, -.29)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =  10
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    TextboxComponent OtherReceiveText_9
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.5, -.29)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text =   0
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    TextComponent YouReceiveText
      letterHeight = 0.04
      pos = (-.72, -.03)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You receive
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    TextComponent OtherReceiveText
      letterHeight = 0.04
      pos = (-.72, -.29)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Other receives
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    TextComponent YouDistribution
      letterHeight = 0.035
      pos = (.65, -.03)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You
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    TextComponent OtherDistribution
      letterHeight = 0.03
      pos = (.65, -.29)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Other
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    PolygonComponent TaskOutline
      fillColor = grey
      lineWidth = 4
      opacity = .2
      pos = (-.15, -.17)
      saveStartStop = False
      shape = rectangle
      size = (1.45, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent You_Amount_Text
      letterHeight = 0.07
      pos = (.75, -.03)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 50
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    TextComponent Other_Amount_Text
      letterHeight = 0.07
      pos = (.75, -.29)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 40
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine welcome_1
    TextComponent IntroText_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        INSTRUCTIONS

        In this task you have been randomly paired with another person, whom we will refer to as the other. This other person is someone you do not know and will remain mutually anonymous. All of your choices are completely confidential. You will be making a series of decisions about allocating resources between you and this other person.

        Press SPACE to continue
    KeyboardComponent IntroKey_1
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine trial
    SliderComponent slider_2
      forceEndRoutine = False
      granularity = .5
      initVal = 5
      letterHeight = 0.05
      saveStartStop = False
      size = (1.0, 0.15)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        raw_self = []
        raw_other = []
      Begin Routine:
        from psychopy.visual.slider import Slider
        from psychopy.visual.line import Line
        from psychopy import event

        this_trial_you = [YouReceiveText_1, YouReceiveText_2, YouReceiveText_3,
                          YouReceiveText_4, YouReceiveText_5, YouReceiveText_6,
                          YouReceiveText_7, YouReceiveText_8, YouReceiveText_9]

        this_trial_other = [OtherReceiveText_1, OtherReceiveText_2, OtherReceiveText_3,
                           OtherReceiveText_4, OtherReceiveText_5, OtherReceiveText_6,
                           OtherReceiveText_7, OtherReceiveText_8, OtherReceiveText_9]

        # Adjust the marker size (smaller = less than default 0.05)
        slider_2.marker.size = 0.04

        tick_xpos = [-.5, -.375, -.25, -.125, 0, .125, .25, .375, .5]
        midpoints = []
        slider_ypos = slider_2.pos[1]
        for i in range(len(tick_xpos)-1):
            midpoint = (tick_xpos[i] + tick_xpos[i+1]) / 2
            midpoints.append(midpoint)

        line_pos = []
        for x in midpoints:
            line = Line(
                win,
                start = (x , slider_ypos -.04),
                end = (x , slider_ypos +.04),
                lineColor = 'gray',
                lineWidth = 6,
                autoDraw = True
            )
            line_pos.append(line)

        for prefix in ['YouReceiveText_', 'OtherReceiveText_']:  # Handle both prefixes
            for i in range(1, 10):  # Covers _1 through _9
                var_name = f"{prefix}{i}"
                if var_name in locals():  # Check if variable exists
                    text_value = str(locals()[var_name])  # Force string conversion
                    if len(text_value) == 1:
                        locals()[var_name] = '  ' + text_value  # 2 spaces for single-digit
                    elif len(text_value) == 2:
                        locals()[var_name] = ' ' + text_value   # 1 space for double-digit
                    else:
                        locals()[var_name] = text_value
      Each Frame:
        # Get precise slider position (1-9)
        slider_pos = slider_2.getRating()

        # Calculate neighboring positions
        lower_pos = int(np.floor(slider_pos)) - 1  # 0-7 index
        upper_pos = int(np.ceil(slider_pos)) - 1   # 0-7 index
        weight = slider_pos % 1  # How close to upper position (0-1)

        # Calculate weighted average (interpolation)
        if weight == 0:  # Exactly on a tick
            you_value = this_trial_you[lower_pos]
            other_value = this_trial_other[lower_pos]
        else:  # Between ticks
            you_value = (1-weight) * this_trial_you[lower_pos] + weight * this_trial_you[upper_pos]
            other_value = (1-weight) * this_trial_other[lower_pos] + weight * this_trial_other[upper_pos]

        # Format the values - round to integer if it's a whole number, otherwise one decimal place
        def format_value(value):
            # Round to one decimal place
            rounded = round(value, 1)
            # Check if it's effectively a whole number
            if rounded == int(rounded):
                return str(int(rounded))  # Return as integer without decimal
            else:
                return str(rounded)  # Return with one decimal place

        # Update displays with appropriate formatting
        YouAmountTextTrial.text = format_value(you_value)
        OtherAmountTextTrial.text = format_value(other_value)
      End Routine:
        # Remove minor tick lines after trial
        for line in line_pos:
            line.autoDraw = False

        # Save trial data
        thisExp.addData('You_Distribution', float(YouAmountTextTrial.text))
        thisExp.addData('Other_Distribution', float(OtherAmountTextTrial.text))


        # Save data to lists for scoring
        raw_self.append(float(YouAmountTextTrial.text))
        raw_other.append(float(OtherAmountTextTrial.text))
    TextboxComponent YouReceiveTextTrial_1
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.5, .13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $YouReceiveText_1
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    TextboxComponent YouReceiveTextTrial_2
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.375, .13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $YouReceiveText_2
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    TextboxComponent YouReceiveTextTrial_3
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.25, .13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $YouReceiveText_3
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    TextboxComponent YouReceiveTextTrial_4
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.125, .13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $YouReceiveText_4
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    TextboxComponent YouReceiveTextTrial_5
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (0, .13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $YouReceiveText_5
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    TextboxComponent YouReceiveTextTrial_6
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.125, .13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $YouReceiveText_6
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    TextboxComponent YouReceiveTextTrial_7
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.25, .13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $YouReceiveText_7
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    TextboxComponent YouReceiveTextTrial_8
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.375, .13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $YouReceiveText_8
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    TextboxComponent YouReceiveTextTrial_9
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.5, .13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $YouReceiveText_9
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    TextboxComponent OtherReceiveTextTrial_1
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.5, -.13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $OtherReceiveText_1
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    TextboxComponent OtherReceiveTextTrial_2
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.375, -.13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $OtherReceiveText_2
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    TextboxComponent OtherReceiveTextTrial_3
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.25, -.13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $OtherReceiveText_3
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    TextboxComponent OtherReceiveTextTrial_4
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (-.125, -.13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $OtherReceiveText_4
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    TextboxComponent OtherReceiveTextTrial_5
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (0, -.13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $OtherReceiveText_5
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    TextboxComponent OtherReceiveTextTrial_6
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.125, -.13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $OtherReceiveText_6
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    TextboxComponent OtherReceiveTextTrial_7
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.25, -.13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $OtherReceiveText_7
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    TextboxComponent OtherReceiveTextTrial_8
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.375, -.13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $OtherReceiveText_8
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    TextboxComponent OtherReceiveTextTrial_9
      autoLog = False
      bold = False
      borderColor = white
      borderWidth = 4
      editable = False
      letterHeight = 0.05
      padding = 0.004
      pos = (.5, -.13)
      saveStartStop = False
      size = (.1,.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $OtherReceiveText_9
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    PolygonComponent TrialOutline
      fillColor = grey
      lineWidth = 4
      opacity = .2
      pos = (-.15, -.01)
      saveStartStop = False
      shape = rectangle
      size = (1.45, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent YouReceiveTextTrial
      letterHeight = 0.04
      pos = (-.72, .13)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You receive
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    TextComponent OtherReceiveTextTrial
      letterHeight = 0.04
      pos = (-.72, -.13)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Other receives
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    TextComponent YouAmountTextTrial
      letterHeight = 0.06
      pos = (.78, .13)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 50
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    TextComponent OtherAmountTextTrial
      letterHeight = 0.06
      pos = (.78, -.13)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 40
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    KeyboardComponent trial_next_space
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent YouDistributionTrial
      letterHeight = 0.035
      pos = (.65, .13)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You
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    TextComponent OtherDistributionTrial
      letterHeight = 0.035
      pos = (.65, -.13)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Other
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    TextComponent space_trial_text
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please select a distribution
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    TextComponent text
      letterHeight = 0.04
      pos = (0, -.41)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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  Routine End
    TextComponent end_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participantion.


        Press SPACE to end
    KeyboardComponent space_end
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent scoring_code
      Code Type = Py
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      Begin Routine:
        import numpy as np
        # Scoring - Murphy, R. O., Ackermann, K. A., & Handgraaf, M. J. J. (2011)
        self_30 = np.array(raw_self) - 50
        other_30 = np.array(raw_other) - 50

        mean_self = np.mean(self_30)
        mean_other = np.mean(other_30)

        ratio = mean_other / mean_self

        angle_rad = np.arctan(ratio)
        angle_deg = np.degrees(angle_rad)

        def classify_svo(angle):
            if angle > 57.15:
                return "Altruistic"
            elif 22.45 < angle < 57.15:
                return "Prosocial"
            elif -12.04 < angle < 22.45:
                return "Individualistic"
            elif angle < -12.04:
                return "Competitive"

        # Get SVO classification
        svo_category = classify_svo(angle_deg)

        # Store the result
        thisExp.addData('SVO_angle_deg', angle_deg)
        thisExp.addData('SVO_category', svo_category)
        '''
        print(f'mean self: {mean_self}')
        print(f'mean other: {mean_other}')
        print(f'angle: {angle_deg}')
        print(svo_category)
        '''
Flow
  Routine welcome_1
  Routine welcome_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = SVO_Trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('YouReceiveText_1', 85), ('YouReceiveText_2', 85), ('YouReceiveText_3', 85), ('YouReceiveText_4', 85), ('YouReceiveText_5', 85), ('YouReceiveText_6', 85), ('YouReceiveText_7', 85), ('YouReceiveText_8', 85), ('YouReceiveText_9', 85), ('OtherReceiveText_1', 85), ('OtherReceiveText_2', 76), ('OtherReceiveText_3', 68), ('OtherReceiveText_4', 59), ('OtherReceiveText_5', 50), ('OtherReceiveText_6', 41), ('OtherReceiveText_7', 33), ('OtherReceiveText_8', 24), ('OtherReceiveText_9', 15)]),
      OrderedDict([('YouReceiveText_1', 85), ('YouReceiveText_2', 87), ('YouReceiveText_3', 89), ('YouReceiveText_4', 91), ('YouReceiveText_5', 93), ('YouReceiveText_6', 94), ('YouReceiveText_7', 96), ('YouReceiveText_8', 98), ('YouReceiveText_9', 100), ('OtherReceiveText_1', 15), ('OtherReceiveText_2', 19), ('OtherReceiveText_3', 24), ('OtherReceiveText_4', 28), ('OtherReceiveText_5', 33), ('OtherReceiveText_6', 37), ('OtherReceiveText_7', 41), ('OtherReceiveText_8', 46), ('OtherReceiveText_9', 50)]),
      OrderedDict([('YouReceiveText_1', 50), ('YouReceiveText_2', 54), ('YouReceiveText_3', 59), ('YouReceiveText_4', 63), ('YouReceiveText_5', 68), ('YouReceiveText_6', 72), ('YouReceiveText_7', 76), ('YouReceiveText_8', 81), ('YouReceiveText_9', 85), ('OtherReceiveText_1', 100), ('OtherReceiveText_2', 98), ('OtherReceiveText_3', 96), ('OtherReceiveText_4', 94), ('OtherReceiveText_5', 93), ('OtherReceiveText_6', 91), ('OtherReceiveText_7', 89), ('OtherReceiveText_8', 87), ('OtherReceiveText_9', 85)]),
      OrderedDict([('YouReceiveText_1', 50), ('YouReceiveText_2', 54), ('YouReceiveText_3', 59), ('YouReceiveText_4', 63), ('YouReceiveText_5', 68), ('YouReceiveText_6', 72), ('YouReceiveText_7', 76), ('YouReceiveText_8', 81), ('YouReceiveText_9', 85), ('OtherReceiveText_1', 100), ('OtherReceiveText_2', 89), ('OtherReceiveText_3', 79), ('OtherReceiveText_4', 68), ('OtherReceiveText_5', 58), ('OtherReceiveText_6', 47), ('OtherReceiveText_7', 36), ('OtherReceiveText_8', 26), ('OtherReceiveText_9', 15)])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
    Routine trial
  LoopTerminator trials
  Routine End
