PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['pOrder'], expName, expInfo['date'])
  Experiment info = {'pOrder': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [2560, 1440]
  color = black
  expName = ravensMatricesBuilder
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Routines
  Routine IntroText
    TextComponent Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        We are beginning the Puzzle Task.

        In this task, you will be shown a series of puzzles. For each puzzle, your goal is to identify the MISSING piece from the options appearing to the right of the puzzle.

        There are 9 puzzles in total. You will have 30 seconds for EACH puzzle.

        Try to be as accurate as you can be. If you cannot solve the puzzle before time runs out, then you should guess.

        Press SPACE to begin.
    KeyboardComponent introNext
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine trial
    ImageComponent Stimuli
      image [set every repeat] = $stimulus
      pos = (-.5, 0)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        n_choices = 0
        col_wrap = 0
      Begin Routine:
        # Split CSV into a list of choices
        choices = [choice.strip() for choice in choices.split(',')]
        n_choices = len(choices)
        start_time = globalClock.getTime()
        trial_timer = core.Clock()

        #Show active choices
        for i in range(8):
            choice = globals()[(f'choice_{i+1}')]
            if i < n_choices:
                choice.image = choices[i]
                choice.setAutoDraw(True)
                choice.opacity = 1
                if n_choices == 6:
                    row = i // 3
                    col = i % 3
                    x_pos = 0.1 + (0.25 * col)
                    y_pos = 0.13 - (0.25 * row)
                else:
                    if i < 6:
                        row = i // 3
                        col = i % 3
                        x_pos = 0.1 + (0.25 * col)
                        y_pos = 0.23 - (0.25 * row)
                    else:
                        x_pos = 0.225 + (0.25 * (i-6))
                        y_pos = -0.27
            else:
                choice.setAutoDraw(False)
                choice.opacity = 0
            choice.pos = [x_pos, y_pos]
            choice.size = [0.2, 0.2]
      Each Frame:
        time_left = 30 - trial_timer.getTime()

        if 0 < time_left <= 5:
            timer.text = str(round(time_left, 1))


        if trial_timer.getTime() >= 30:
            continueRoutine = False
      End Routine:
        thisExp.addData('trial.time', globalClock.getTime() - start_time)

        try:
            current_choice = mouse.clicked_name[0]
            if current_choice == f'choice_{correct + 1}':
                thisExp.addData('trial.correct', 1)
            else:
                thisExp.addData('trial.correct', 0)
        except:
            continueRoutine = False
    ImageComponent choice_1
      image = None
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent choice_2
      image = None
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent choice_3
      image = None
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent choice_4
      image = None
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent choice_5
      image = None
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent choice_6
      image = None
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent choice_7
      image = None
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent choice_8
      image = None
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = choice_1,choice_2,choice_3,choice_4,choice_5,choice_6,choice_7,choice_8
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent timer
      color [set every frame] = red
      letterHeight = 0.1
      pos = (-.78,.43)
      saveStartStop = False
      startVal [time (s)] = 25
      stopVal [duration (s)] = 5
      text = 5
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  Routine beginText
    TextComponent begin
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = 5
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        trial_timer = core.Clock()
        time_left = 3
      Each Frame:
        time_left = 3 - trial_timer.getTime()

        if 0 < time_left <= 3:
            begin.text = str(round(time_left))


        if trial_timer.getTime() >= 3:
            continueRoutine = False
  Routine end
    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for playing

        Press SPACE to end
    KeyboardComponent space_end
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
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      End Experiment:
        import math

        def dot_product(x, y):
            sum = 0
            for i in range(len(x)):
                sum += x[i] * y[i]
            return sum

        # Extract the relevant data from the experiment
        # Looking at the 'trial.correct' column which contains 1 for correct and 0 for incorrect
        accuracy = []
        reaction_times = []

        for trial in range(len(thisExp.entries)):
            # Check if this is a trial with stimulus and correctness data
            if 'stimulus' in thisExp.entries[trial] and 'trial.correct' in thisExp.entries[trial]:
                if thisExp.entries[trial]['stimulus'] != '':  # Only include actual trials
                    accuracy.append(thisExp.entries[trial]['trial.correct'])
                    reaction_times.append(thisExp.entries[trial]['trial.time'])

        # Calculate scores
        rpm_raw = sum(accuracy)
        rpm_err = 9 - rpm_raw
        rpm_rt = sum(reaction_times)

        # Convert errors to the format needed (1 for error, 0 for correct)
        errors = [1 - acc for acc in accuracy]

        # Score RPM using Bilker et al. 2012 formula
        weights = [0.168, 0.212, 0.247, 0.189, 0.203, 0.135, 0.243, 0.316, 0.193]
        rpm_adj = 60 - (rpm_err + math.exp(1.875 + dot_product(errors, weights)))

        # Store results in experiment data
        thisExp.addData('rpm_raw', rpm_raw)
        thisExp.addData('rpm_err', rpm_err)
        thisExp.addData('rpm_adj', rpm_adj)
        thisExp.addData('rpm_rt', rpm_rt)
        '''
        # Print results to output for verification
        print(f"RPM Raw Score: {rpm_raw}")
        print(f"RPM Error Count: {rpm_err}")
        print(f"RPM Adjusted Score: {rpm_adj:.2f}")
        print(f"RPM Total Response Time: {rpm_rt:.2f}")
        '''
Flow
  Routine IntroText
  Routine beginText
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'b10'), ('choices', 'b10_1.png,b10_2.png,b10_3.png,b10_4.png,b10_5.png,b10_6.png'), ('correct', 2), ('col_wrap', 3)]),
      OrderedDict([('stimulus', 'b16'), ('choices', 'b16_1.png,b16_2.png,b16_3.png,b16_4.png,b16_5.png,b16_6.png'), ('correct', 1), ('col_wrap', 3)]),
      OrderedDict([('stimulus', 'b21'), ('choices', 'b21_1.png,b21_2.png,b21_3.png,b21_4.png,b21_5.png,b21_6.png'), ('correct', 3), ('col_wrap', 3)]),
      OrderedDict([('stimulus', 'b30'), ('choices', 'b30_1.png,b30_2.png,b30_3.png,b30_4.png,b30_5.png,b30_6.png,b30_7.png,b30_8.png'), ('correct', 3), ('col_wrap', 4)]),
      OrderedDict([('stimulus', 'b34'), ('choices', 'b34_1.png,b34_2.png,b34_3.png,b34_4.png,b34_5.png,b34_6.png,b34_7.png,b34_8.png'), ('correct', 5), ('col_wrap', 4)]),
      OrderedDict([('stimulus', 'b44'), ('choices', 'b44_1.png,b44_2.png,b44_3.png,b44_4.png,b44_5.png,b44_6.png,b44_7.png,b44_8.png'), ('correct', 3), ('col_wrap', 4)]),
      OrderedDict([('stimulus', 'b50'), ('choices', 'b50_1.png,b50_2.png,b50_3.png,b50_4.png,b50_5.png,b50_6.png,b50_7.png,b50_8.png'), ('correct', 5), ('col_wrap', 4)]),
      OrderedDict([('stimulus', 'b52'), ('choices', 'b52_1.png,b52_2.png,b52_3.png,b52_4.png,b52_5.png,b52_6.png,b52_7.png,b52_8.png'), ('correct', 1), ('col_wrap', 4)]),
      OrderedDict([('stimulus', 'b57'), ('choices', 'b57_1.png,b57_2.png,b57_3.png,b57_4.png,b57_5.png,b57_6.png,b57_7.png,b57_8.png'), ('correct', 0), ('col_wrap', 4)])]
    Routine trial
  LoopTerminator trials
  Routine end
